<?xml version='1.0'?>
<model name="FCepsilonRI" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_per_s">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="per_uM_per_s">
        <unit exponent="-1" units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="t" public_interface="out" units="s"/>
    </component>
    <component name="FCepsilonRI">
        <variable name="t" public_interface="in" units="s"/>
        <variable name="J1" units="uM_per_s"/>
        <variable name="J2" units="uM_per_s"/>
        <variable name="J3" units="uM_per_s"/>
        <variable name="J4" units="uM_per_s"/>
        <variable name="J5" units="uM_per_s"/>
        <variable name="J6" units="uM_per_s"/>
        <variable name="J7" units="uM_per_s"/>
        <variable name="J8" units="uM_per_s"/>
        <!--variables-->
        <variable initial_value="0.0471623513639183" name="pLyn" units="uM"/>
        <variable initial_value="0.473765727686631" name="FC" units="uM"/>
        <variable initial_value="0.0" name="pFC" units="uM"/>
        <variable initial_value="0.402903914280305" name="Syk" units="uM"/>
        <variable initial_value="0.0" name="pSyk" units="uM"/>
        <variable initial_value="0" name="Grb2" units="uM"/>
        <variable initial_value="0" name="pGrb2" units="uM"/>
        <variable initial_value="0" name="PI3k" units="uM"/>
        <variable initial_value="0" name="PI3kstar" units="uM"/>
        <!--rate constants-->
        <variable initial_value="1.0" name="k_f1" units="per_uM_per_s"/>
        <variable initial_value="1.0" name="k_f2" units="per_uM_per_s"/>
        <variable initial_value="1.0" name="k_f3" units="per_uM_per_s"/>
        <variable initial_value="1.0" name="k_f4" units="per_uM_per_s"/>
        <variable initial_value="1.0" name="K_1" units="uM"/>
        <variable initial_value="1.0" name="K_2" units="uM"/>
        <variable initial_value="1.0" name="K_3" units="uM"/>
        <variable initial_value="1.0" name="K_4" units="uM"/>
        <variable initial_value="1.0" name="K_5" units="uM"/>
        <variable initial_value="1.0" name="K_6" units="uM"/>
        <variable initial_value="1.0" name="K_7" units="uM"/>
        <variable initial_value="1.0" name="K_8" units="uM"/>
        <variable initial_value="1.0" name="K_9" units="uM"/>
        <variable initial_value="1.0" name="K_10" units="uM"/>
        <variable initial_value="1.0" name="K_11" units="uM"/>
        <variable initial_value="1.0" name="K_12" units="uM"/>
        <variable initial_value="1.0" name="V_1" units="uM_per_s"/>
        <variable initial_value="1.0" name="V_2" units="uM_per_s"/>
        <variable initial_value="1.0" name="V_3" units="uM_per_s"/>
        <variable initial_value="1.0" name="V_4" units="uM_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f1</ci>
                        <ci>pLyn</ci>
                        <ci>FC</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>K_1</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1.0</cn>
                                <apply>
                                    <divide/>
                                    <ci>pFC</ci>
                                    <ci>K_2</ci>
                                </apply>
                            </apply>
                        </apply>
                        <ci>FC</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J2</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>V_1</ci>
                        <ci>pFC</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>K_3</ci>
                        <ci>pFC</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f2</ci>
                        <ci>pFC</ci>
                        <ci>Syk</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>K_4</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1.0</cn>
                                <apply>
                                    <divide/>
                                    <ci>pSyk</ci>
                                    <ci>K_5</ci>
                                </apply>
                            </apply>
                        </apply>
                        <ci>Syk</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J4</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>V_2</ci>
                        <ci>pSyk</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>K_6</ci>
                        <ci>pSyk</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J5</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f3</ci>
                        <ci>pSyk</ci>
                        <ci>Grb2</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>K_7</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1.0</cn>
                                <apply>
                                    <divide/>
                                    <ci>pGrb2</ci>
                                    <ci>K_8</ci>
                                </apply>
                            </apply>
                        </apply>
                        <ci>Grb2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J6</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>V_3</ci>
                        <ci>pGrb2</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>K_9</ci>
                        <ci>pGrb2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J7</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f4</ci>
                        <ci>pGrb2</ci>
                        <ci>PI3k</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>K_10</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1.0</cn>
                                <apply>
                                    <divide/>
                                    <ci>PI3kstar</ci>
                                    <ci>K_11</ci>
                                </apply>
                            </apply>
                        </apply>
                        <ci>PI3k</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J8</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>V_4</ci>
                        <ci>PI3kstar</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>K_12</ci>
                        <ci>PI3kstar</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>FC</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J1</ci>
                    </apply>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pFC</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Syk</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J3</ci>
                    </apply>
                    <ci>J4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pSyk</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J3</ci>
                    <ci>J4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Grb2</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J5</ci>
                    </apply>
                    <ci>J6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pGrb2</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J5</ci>
                    <ci>J6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>PI3k</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J7</ci>
                    </apply>
                    <ci>J8</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>PI3kstar</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J7</ci>
                    <ci>J8</ci>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="environment" component_2="FCepsilonRI"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
